///////////////////////////////////////////////////////////////////////////////
// PEAK ANALYSIS FOR SYNAPTIC LOCATIONS
///////////////////////////////////////////////////////////////////////////////

// for unsorted responses

objref stimSynACSFPeak[5],stimSynACSFBase[5]

objref dendStimSynPeak,dendStimSynBase
dendStimSynPeak = new Vector(5)
dendStimSynBase = new Vector(5)

for n=0,4{
	stimSynACSFPeak[n] = new Vector(numSyn)
	stimSynACSFBase[n] = new Vector(numSyn)
	for m=1,numSyn{
		stimSynACSFPeak[n].x[m-1] = stimSynACSF[n][m-1].max
		stimSynACSFBase[n].x[m-1] = stimSynACSF[n][m-1].min
	}
}

for n=0,4{
	dendStimSynPeak.x[n] = dendStimSyn[n].max
	dendStimSynBase.x[n] = dendStimSyn[n].min
}



//////////////////////////////////////////////////////////////////////////////
// INTEGRAL ANALYSIS FOR SYNAPTIC LOCATIONS
//////////////////////////////////////////////////////////////////////////////

// LOAD NECESSARY FUNCTIONS
{
	load_file("getVoltageIntegral.hoc")  
}
	
// for unsorted responses

objref stimSynACSFInt[5]

objref dendStimSynInt
dendStimSynInt = new Vector(5)

for n=0,4{
	stimSynACSFInt[n] = new Vector(numSyn)
	for m=1,numSyn{
		stimSynACSFInt[n].x[m-1] = getVoltageIntegral(stimSynACSF[n][m-1],dt,tBaseline,tstop)
	}
}

for n=0,4{
	dendStimSynInt.x[n] = getVoltageIntegral(dendStimSyn[n],dt,tBaseline,tstop)
}



//////////////////////////////////////////////////////////////////////////////
// VARIANCE ANALYSIS FOR SYNAPTIC LOCATIONS
//////////////////////////////////////////////////////////////////////////////



///////////////////////////////////////////////////////////////////////////////
// OUTPUT ANALYSIS RESULTS
///////////////////////////////////////////////////////////////////////////////

objref f1
f1 = new File()

f1.wopen("dataSingleStim.csv")

for n=0,4{
	f1.printf("RUN%d\n",n)
	f1.printf("\"\",")
	for m=1,numSyn{
		f1.printf("Exp2Syn[%d],",m-1)
	}
	f1.printf("Soma\n")
	for i=1,time.size(){
		f1.printf("TIME[%d],",i-1)
		for m=1,numSyn{
			f1.printf("%lf,",time.x[i-1])
		}
		f1.printf("%lf\n",time.x[i-1])
	}
	for i=1,stimSynACSF[n][0].size(){
		f1.printf("VOLT[%d],",i-1)
		for m=1,numSyn{
			f1.printf("%lf,",stimSynACSF[n][m-1].x[i-1])
		}
		f1.printf("%lf\n",dendStimSyn[n].x[i-1])
	}
	f1.printf("PEAK,")
	for m=1,numSyn{
		f1.printf("%lf,",stimSynACSFPeak[n].x[m-1])
	}
	f1.printf("%lf\n",dendStimSynPeak.x[n])
	f1.printf("BASE,")
	for m=1,numSyn{
		f1.printf("%lf,",stimSynACSFBase[n].x[m-1])
	}
	f1.printf("%lf\n",dendStimSynBase.x[n])
	f1.printf("INT,")
	for m=1,numSyn{
		f1.printf("%lf,",stimSynACSFInt[n].x[m-1])
	}
	f1.printf("%lf\n",dendStimSynInt.x[n])

	// VAR

}

/*
f1.printf("Unsorted responses\tPEAK\tINTEGRAL\n\n")
for m=1,numSyn{
	f1.printf("\t\t%d\t%lf\t%lf\n",m-1,voltACSFPeak.x[m-1],voltACSFInt.x[m-1])
}
f1.printf("Sorted by distance responses\tPEAK\tINTEGRAL\n\n")
for m=1,numSyn{
	f1.printf("\n\n\t\t\t%d\t%lf\t%lf\n",m-1,voltACSFPeakSort.x[m-1],voltACSFIntSort.x[m-1])
}
*/

f1.close()